# Generated by Configurator on Tue Jan 12 18:24:18 GMT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM6,SerialManager,COM6
Device,COM7,SerialManager,COM7
Device,COM8,SerialManager,COM8
Device,Camera,PVCAM,Camera-1
Device,XYStage,Prior,XYStage
Device,Filter_Wheel,Prior,Wheel-1
Device,Shutter-1_488,Prior,Shutter-1
Device,Shutter-2_561,Prior,Shutter-2
Device,Shutter-3_641,Prior,Shutter-3
Device,405 Shutter,ThorlabsSC10,SC10
Device,Ti2-E,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,Nosepiece,NikonTi2,Nosepiece
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,DiaLamp,NikonTi2,DiaLamp
Device,iBeamSmartCW-405,Toptica_iBeamSmartCW,iBeamSmartCW

# Pre-init settings for devices
Property,XYStage,Port,COM8
Property,Filter_Wheel,Port,COM8
Property,Shutter-1_488,Port,COM8
Property,Shutter-2_561,Port,COM8
Property,Shutter-3_641,Port,COM8
Property,405 Shutter,Port,COM6
Property,iBeamSmartCW-405,Description,iBeam smart Laser Controller
Property,iBeamSmartCW-405,Port,COM7

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,115200
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,COM7,DTR,Disable
Property,COM7,Fast USB to Serial,Enable
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,9600
Property,COM8,DTR,Disable
Property,COM8,DataBits,8
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Fast USB to Serial,Disable
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,1

# Hub (parent) references
Parent,ZDrive,Ti2-E
Parent,Nosepiece,Ti2-E
Parent,LightPath,Ti2-E
Parent,PFS,Ti2-E
Parent,PFSOffset,Ti2-E
Parent,IntermediateMagnification,Ti2-E
Parent,DiaLamp,Ti2-E

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,Camera
Property,Core,Focus,PFSOffset
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Filter_Wheel
Label,Filter_Wheel,9,460 BP
Label,Filter_Wheel,8,568 LP + 587 BP
Label,Filter_Wheel,7,488 LP
Label,Filter_Wheel,6,561 LP + 580 BP
Label,Filter_Wheel,5,561 LP + 607 BP
Label,Filter_Wheel,4,Empty
Label,Filter_Wheel,3,692 BP
Label,Filter_Wheel,2,480 BP
Label,Filter_Wheel,1,488 LP + 520 BP
Label,Filter_Wheel,0,561 LP
# Nosepiece
Label,Nosepiece,5,6-
Label,Nosepiece,4,5-
Label,Nosepiece,3,4-
Label,Nosepiece,2,3-Apo TIRF AC 100x Oil
Label,Nosepiece,1,2-
Label,Nosepiece,0,1-
# LightPath
Label,LightPath,3,4-Camera
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE

# Configuration presets
# Group: System
# Preset: Startup


# Group: EM Gain
# Preset: EMGain
ConfigGroup,EM Gain,EMGain,Camera,MultiplierGain,250


# Group: White Light
# Preset: NewPreset
ConfigGroup,White Light,NewPreset,DiaLamp,Intensity,2100


# Group: FilterWheel Delay [ms]
# Preset: NewPreset
ConfigGroup,FilterWheel Delay [ms],NewPreset,Filter_Wheel,Delay_ms,0.0000


# Group: Standard Imaging Modes
# Preset: 561
ConfigGroup,Standard Imaging Modes,561,Camera,MultiplierGain,250
ConfigGroup,Standard Imaging Modes,561,Filter_Wheel,Label,568 LP + 587 BP
ConfigGroup,Standard Imaging Modes,561,Filter_Wheel,State,8
ConfigGroup,Standard Imaging Modes,561,Shutter-1_488,State,0
ConfigGroup,Standard Imaging Modes,561,Shutter-2_561,State,0
ConfigGroup,Standard Imaging Modes,561,Shutter-3_641,State,0
ConfigGroup,Standard Imaging Modes,561,Core,Shutter,Shutter-2_561
ConfigGroup,Standard Imaging Modes,561,Camera,ClearMode,Pre-Sequence
ConfigGroup,Standard Imaging Modes,561,Core,AutoShutter,1
ConfigGroup,Standard Imaging Modes,561,DiaLamp,Intensity,1660
ConfigGroup,Standard Imaging Modes,561,DiaLamp,State,0
ConfigGroup,Standard Imaging Modes,561,LightPath,Label,4-Camera

# Preset: 488
ConfigGroup,Standard Imaging Modes,488,Camera,MultiplierGain,250
ConfigGroup,Standard Imaging Modes,488,Filter_Wheel,Label,488 LP + 520 BP
ConfigGroup,Standard Imaging Modes,488,Filter_Wheel,State,1
ConfigGroup,Standard Imaging Modes,488,Shutter-1_488,State,0
ConfigGroup,Standard Imaging Modes,488,Shutter-2_561,State,0
ConfigGroup,Standard Imaging Modes,488,Shutter-3_641,State,0
ConfigGroup,Standard Imaging Modes,488,Core,Shutter,Shutter-1_488
ConfigGroup,Standard Imaging Modes,488,Camera,ClearMode,Pre-Sequence
ConfigGroup,Standard Imaging Modes,488,Core,AutoShutter,1
ConfigGroup,Standard Imaging Modes,488,DiaLamp,Intensity,1660
ConfigGroup,Standard Imaging Modes,488,DiaLamp,State,0
ConfigGroup,Standard Imaging Modes,488,LightPath,Label,4-Camera

# Preset: White Light
ConfigGroup,Standard Imaging Modes,White Light,Camera,ClearMode,Pre-Sequence
ConfigGroup,Standard Imaging Modes,White Light,Camera,MultiplierGain,1
ConfigGroup,Standard Imaging Modes,White Light,Filter_Wheel,Label,Empty
ConfigGroup,Standard Imaging Modes,White Light,Filter_Wheel,State,4
ConfigGroup,Standard Imaging Modes,White Light,Shutter-1_488,State,0
ConfigGroup,Standard Imaging Modes,White Light,Shutter-2_561,State,0
ConfigGroup,Standard Imaging Modes,White Light,Shutter-3_641,State,0
ConfigGroup,Standard Imaging Modes,White Light,Core,Shutter,
ConfigGroup,Standard Imaging Modes,White Light,Core,AutoShutter,0
ConfigGroup,Standard Imaging Modes,White Light,DiaLamp,Intensity,2100
ConfigGroup,Standard Imaging Modes,White Light,DiaLamp,State,1
ConfigGroup,Standard Imaging Modes,White Light,LightPath,Label,4-Camera

# Preset: 641
ConfigGroup,Standard Imaging Modes,641,Camera,MultiplierGain,250
ConfigGroup,Standard Imaging Modes,641,Filter_Wheel,Label,692 BP
ConfigGroup,Standard Imaging Modes,641,Filter_Wheel,State,3
ConfigGroup,Standard Imaging Modes,641,Shutter-1_488,State,0
ConfigGroup,Standard Imaging Modes,641,Shutter-2_561,State,0
ConfigGroup,Standard Imaging Modes,641,Shutter-3_641,State,0
ConfigGroup,Standard Imaging Modes,641,Core,Shutter,Shutter-3_641
ConfigGroup,Standard Imaging Modes,641,Camera,ClearMode,Pre-Sequence
ConfigGroup,Standard Imaging Modes,641,Core,AutoShutter,1
ConfigGroup,Standard Imaging Modes,641,DiaLamp,Intensity,1660
ConfigGroup,Standard Imaging Modes,641,DiaLamp,State,0
ConfigGroup,Standard Imaging Modes,641,LightPath,Label,4-Camera

# Preset: 405
ConfigGroup,Standard Imaging Modes,405,Camera,MultiplierGain,250
ConfigGroup,Standard Imaging Modes,405,Filter_Wheel,State,2
ConfigGroup,Standard Imaging Modes,405,Shutter-1_488,State,0
ConfigGroup,Standard Imaging Modes,405,Shutter-2_561,State,0
ConfigGroup,Standard Imaging Modes,405,Shutter-3_641,State,0
ConfigGroup,Standard Imaging Modes,405,Core,Shutter,405 Shutter
ConfigGroup,Standard Imaging Modes,405,Filter_Wheel,Label,480 BP
ConfigGroup,Standard Imaging Modes,405,Camera,ClearMode,Pre-Sequence
ConfigGroup,Standard Imaging Modes,405,Core,AutoShutter,1
ConfigGroup,Standard Imaging Modes,405,DiaLamp,Intensity,1660
ConfigGroup,Standard Imaging Modes,405,DiaLamp,State,0
ConfigGroup,Standard Imaging Modes,405,LightPath,Label,4-Camera


# Group: Set Power 405 [mW]
# Preset: NewPreset
ConfigGroup,Set Power 405 [mW],NewPreset,iBeamSmartCW-405,Power (mW),120.0000


# Group: Filter Wheel Selector
# Preset: 460 BP
ConfigGroup,Filter Wheel Selector,460 BP,Filter_Wheel,Label,460 BP
ConfigGroup,Filter Wheel Selector,460 BP,Filter_Wheel,State,9
ConfigGroup,Filter Wheel Selector,460 BP,Shutter-1_488,State,0
ConfigGroup,Filter Wheel Selector,460 BP,Shutter-2_561,State,0
ConfigGroup,Filter Wheel Selector,460 BP,Shutter-3_641,State,0
ConfigGroup,Filter Wheel Selector,460 BP,Camera,MultiplierGain,250

# Preset: Empty
ConfigGroup,Filter Wheel Selector,Empty,Filter_Wheel,Label,Empty
ConfigGroup,Filter Wheel Selector,Empty,Filter_Wheel,State,4
ConfigGroup,Filter Wheel Selector,Empty,Shutter-1_488,State,0
ConfigGroup,Filter Wheel Selector,Empty,Shutter-2_561,State,0
ConfigGroup,Filter Wheel Selector,Empty,Shutter-3_641,State,0
ConfigGroup,Filter Wheel Selector,Empty,Camera,MultiplierGain,250

# Preset: 488 LP + 520 BP
ConfigGroup,Filter Wheel Selector,488 LP + 520 BP,Filter_Wheel,Label,488 LP + 520 BP
ConfigGroup,Filter Wheel Selector,488 LP + 520 BP,Filter_Wheel,State,1
ConfigGroup,Filter Wheel Selector,488 LP + 520 BP,Shutter-1_488,State,0
ConfigGroup,Filter Wheel Selector,488 LP + 520 BP,Shutter-2_561,State,0
ConfigGroup,Filter Wheel Selector,488 LP + 520 BP,Shutter-3_641,State,0
ConfigGroup,Filter Wheel Selector,488 LP + 520 BP,Camera,MultiplierGain,250

# Preset: 488 LP
ConfigGroup,Filter Wheel Selector,488 LP,Filter_Wheel,Label,488 LP
ConfigGroup,Filter Wheel Selector,488 LP,Filter_Wheel,State,7
ConfigGroup,Filter Wheel Selector,488 LP,Shutter-1_488,State,0
ConfigGroup,Filter Wheel Selector,488 LP,Shutter-2_561,State,0
ConfigGroup,Filter Wheel Selector,488 LP,Shutter-3_641,State,0
ConfigGroup,Filter Wheel Selector,488 LP,Camera,MultiplierGain,250

# Preset: 561 LP + 580 BP
ConfigGroup,Filter Wheel Selector,561 LP + 580 BP,Filter_Wheel,Label,561 LP + 580 BP
ConfigGroup,Filter Wheel Selector,561 LP + 580 BP,Filter_Wheel,State,6
ConfigGroup,Filter Wheel Selector,561 LP + 580 BP,Shutter-1_488,State,0
ConfigGroup,Filter Wheel Selector,561 LP + 580 BP,Shutter-2_561,State,0
ConfigGroup,Filter Wheel Selector,561 LP + 580 BP,Shutter-3_641,State,0
ConfigGroup,Filter Wheel Selector,561 LP + 580 BP,Camera,MultiplierGain,250

# Preset: 561 LP
ConfigGroup,Filter Wheel Selector,561 LP,Filter_Wheel,Label,561 LP
ConfigGroup,Filter Wheel Selector,561 LP,Filter_Wheel,State,0
ConfigGroup,Filter Wheel Selector,561 LP,Shutter-1_488,State,0
ConfigGroup,Filter Wheel Selector,561 LP,Shutter-2_561,State,0
ConfigGroup,Filter Wheel Selector,561 LP,Shutter-3_641,State,0
ConfigGroup,Filter Wheel Selector,561 LP,Camera,MultiplierGain,250

# Preset: 561 LP + 587 BP
ConfigGroup,Filter Wheel Selector,561 LP + 587 BP,Filter_Wheel,Label,568 LP + 587 BP
ConfigGroup,Filter Wheel Selector,561 LP + 587 BP,Filter_Wheel,State,8
ConfigGroup,Filter Wheel Selector,561 LP + 587 BP,Shutter-1_488,State,0
ConfigGroup,Filter Wheel Selector,561 LP + 587 BP,Shutter-2_561,State,0
ConfigGroup,Filter Wheel Selector,561 LP + 587 BP,Shutter-3_641,State,0
ConfigGroup,Filter Wheel Selector,561 LP + 587 BP,Camera,MultiplierGain,250

# Preset: 561 LP + 607 BP
ConfigGroup,Filter Wheel Selector,561 LP + 607 BP,Filter_Wheel,Label,561 LP + 607 BP
ConfigGroup,Filter Wheel Selector,561 LP + 607 BP,Filter_Wheel,State,5
ConfigGroup,Filter Wheel Selector,561 LP + 607 BP,Shutter-1_488,State,0
ConfigGroup,Filter Wheel Selector,561 LP + 607 BP,Shutter-2_561,State,0
ConfigGroup,Filter Wheel Selector,561 LP + 607 BP,Shutter-3_641,State,0
ConfigGroup,Filter Wheel Selector,561 LP + 607 BP,Camera,MultiplierGain,250

# Preset: 480 BP
ConfigGroup,Filter Wheel Selector,480 BP,Filter_Wheel,Label,480 BP
ConfigGroup,Filter Wheel Selector,480 BP,Filter_Wheel,State,2
ConfigGroup,Filter Wheel Selector,480 BP,Shutter-1_488,State,0
ConfigGroup,Filter Wheel Selector,480 BP,Shutter-2_561,State,0
ConfigGroup,Filter Wheel Selector,480 BP,Shutter-3_641,State,0
ConfigGroup,Filter Wheel Selector,480 BP,Camera,MultiplierGain,250

# Preset: 692 BP
ConfigGroup,Filter Wheel Selector,692 BP,Filter_Wheel,Label,692 BP
ConfigGroup,Filter Wheel Selector,692 BP,Filter_Wheel,State,3
ConfigGroup,Filter Wheel Selector,692 BP,Shutter-1_488,State,0
ConfigGroup,Filter Wheel Selector,692 BP,Shutter-2_561,State,0
ConfigGroup,Filter Wheel Selector,692 BP,Shutter-3_641,State,0
ConfigGroup,Filter Wheel Selector,692 BP,Camera,MultiplierGain,250


# Group: Channel

# Group: 405 Laser ON/OFF
# Preset: On
ConfigGroup,405 Laser ON/OFF,On,iBeamSmartCW-405,Laser Operation,On

# Preset: Off
ConfigGroup,405 Laser ON/OFF,Off,iBeamSmartCW-405,Laser Operation,Off



# PixelSize settings

